graphs:
  - id: bands
    nodes:
    - id: sub
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: [ filtered ]
    - id: electrodeselection
      module: nodes.electrodes
      class: ElectrodeDeletion
      params:
        electrodes: {{ ELECTRODES }}
    - id: bandextract
      module: nodes.bands
      class: BandExtraction
      params:
        bands: {{ BANDS }}
    - id: relax
      module: nodes.bands
      class: Relax
    - id: pub_bands
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: bands
    - id: pubrelax
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: relaxlevel
    edge:
      - source: sub:filtered
        target: electrodeselection
      - source: electrodeselection
        target: bandextract
      - source: bandextract
        target: relax
      - source: band_extract
        target: pubbands
      - source: relax
        target: pubrelax
    rate: 10